includeFile = Materials.txt


s:Ge/PMMA/Type   = "Group"
s:Ge/PMMA/Parent = "World"
s:Ge/PMMA/empty  = "World"

d:Ge/PMMA/TransZ  = 0 mm
d:Ge/PMMA/LZ      = Ge/PMMA/block/L mm
d:Ge/PMMA/posEndZ = Ge/PMMA/TransZ + Ge/PMMA/LZ m

# shifted to make front (beam entrance) surface at z=0
s:Ge/PMMA/block/Type     = "TsBox"
s:Ge/PMMA/block/Parent   = "PMMA"
s:Ge/PMMA/block/Material = "PMMA_Dresden"
d:Ge/PMMA/block/HLX      = 90 mm
d:Ge/PMMA/block/HLY      = 45 mm
d:Ge/PMMA/block/HLZ      = 0.5 * Ge/PMMA/block/L m
d:Ge/PMMA/block/L        = 5.8 mm
d:Ge/PMMA/block/TransZ   = Ge/PMMA/block/HLZ m
s:Ge/PMMA/block/Color            = "red"
