includeFile = Materials.txt


s:Ge/Collimator1/Type   = "Group"
s:Ge/Collimator1/Parent = "World"
s:Ge/Collimator1/empty  = "World"




### erzeuge Messingzylinder ###
s:Ge/Collimator1/metall/Type     = "TsCylinder"
s:Ge/Collimator1/metall/Parent   = "Collimator1"
s:Ge/Collimator1/metall/Material = "CuZn39Pb3"
d:Ge/Collimator1/metall/HL       = 16.5 mm
d:Ge/Collimator1/metall/Rmax     = 9 cm

### erzeuge quaderfˆrmiges Loch im Messingzylinder ###
s:Ge/Collimator1/hole/Type	= "TsBox"
s:Ge/Collimator1/hole/Parent	= "Collimator1/metall"
s:Ge/Collimator1/hole/Material	= Ge/Collimator1/empty
d:Ge/Collimator1/hole/HLX	= 38.75 mm
d:Ge/Collimator1/hole/HLY	= 38.5  mm
d:Ge/Collimator1/hole/HLZ	= Ge/Collimator1/metall/HL mm
